<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>2.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
<!--       <LatticeType>Hexagonal</LatticeType>
 -->   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="NORM"/>
      <CellType TypeId="2" TypeName="TMIGR"/>
      <CellType TypeId="3" TypeName="TPROL"/>
      <CellType TypeId="4" TypeName="NECR"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="NORM">10.0</Energy>
      <Energy Type1="Medium" Type2="TMIGR">9.0</Energy>
      <Energy Type1="Medium" Type2="TPROL">10.0</Energy>
      <Energy Type1="Medium" Type2="NECR">10.0</Energy>

      <Energy Type1="NORM" Type2="NORM">8.0</Energy>
      <Energy Type1="NORM" Type2="TMIGR">10.0</Energy>
      <Energy Type1="NORM" Type2="TPROL">8.0</Energy>
      <Energy Type1="NORM" Type2="NECR">10.0</Energy>

      <Energy Type1="TMIGR" Type2="TMIGR">10.0</Energy>
      <Energy Type1="TMIGR" Type2="TPROL">10.0</Energy>
      <Energy Type1="TMIGR" Type2="NECR">10.0</Energy>

      <Energy Type1="TPROL" Type2="TPROL">10.0</Energy>
      <Energy Type1="TPROL" Type2="NECR">10.0</Energy>

      <Energy Type1="NECR" Type2="NECR">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   

   <Plugin Name="Chemotaxis">
      <Algorithm>merks</Algorithm>
      <ChemicalField  Source="DiffusionSolverFE"  Name="OXYGEN">
         <ChemotaxisByType  Type="TMIGR"  Lambda="1" />
      </ChemicalField>

   </Plugin>


   <Plugin Name="Secretion">
      
      <!-- Specification of secretion properties of select cell types. -->
      <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
      <!-- Specification of secretion properties of individual cells can be done in Python -->
      <Field Name="MMP">
         <ConstantConcentration Type="TPROL">0.03</ConstantConcentration>
      </Field>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="MMP">
         <DiffusionData>
            <FieldName>MMP</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="NORM">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="TMIGR">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="TPROL">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="NECR">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="NORM">0.01</DecayCoefficient>
            <DecayCoefficient CellType="TMIGR">0.01</DecayCoefficient>
            <DecayCoefficient CellType="TPROL">0.01</DecayCoefficient>
            <DecayCoefficient CellType="NECR">0.01</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFEall secretio nconstants are scaled automaticly to account for extra calls of the solver when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
<!--          <Secretion Type="TPROL">5</Secretion>
 -->
            <SecretionOnContact SecreteOnContactWith="NORM" Type="TPROL">10</SecretionOnContact>
            <!-- <ConstantConcentration Type="NECR">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="OXYGEN">
         <DiffusionData>
            <FieldName>OXYGEN</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <InitialConcentrationExpression>0.2*x*y</InitialConcentrationExpression>
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="NORM">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="TMIGR">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="TPROL">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="NECR">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="NORM">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="TMIGR">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="TPROL">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="NECR">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFEall secretio nconstants are scaled automaticly to account for extra calls of the solver when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="NORM">0.1</Secretion>
            <Secretion Type="TMIGR">0.1</Secretion>
            <Secretion Type="TPROL">0.1</Secretion>
            <Secretion Type="NECR">0.1</Secretion> -->
            <Uptake Type="NORM" MaxUptake="5" RelativeUpdate="0.99" />
            <Uptake Type="TPROL" MaxUptake="20" RelativeUpdate="0.99" />
            <Uptake Type="TMIGR" MaxUptake="20" RelativeUpdate="0.99" />
            <!-- <SecretionOnContact SecreteOnContactWith="NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,TMIGR,TPROL,NECR" Type="NECR">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="NECR">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,NORM,TMIGR,TPROL,NECR</Types>
      </Region>
   </Steppable>
</CompuCell3D>
